CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:DAPI
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    Set intensity range from:Image bit-depth
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):15,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Propagate
    Size of smoothing filter:8
    Suppress local maxima that are closer than this minimum allowed distance:8
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
ExpandOrShrinkObjects:[module_num:6|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
    Select the input objects:Nuclei
    Name the output objects:ShrunkenNuclei
    Select the operation:Add partial dividing lines between objects
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
ConvertObjectsToImage:[module_num:7|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
    Select the input objects:ShrunkenNuclei
    Name the output image:SelectedNuclei
    Select the color format:Binary (black & white)
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
Opening:[module_num:8|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
    Select the input image:SelectedNuclei
    Name the output image:Opening
    Structuring element:diamond,3

IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:Opening
    Name the primary objects to be identified:OpenedNuclei
    Typical diameter of objects, in pixel units (Min,Max):15,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Propagate
    Size of smoothing filter:0
    Suppress local maxima that are closer than this minimum allowed distance:5
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
ExpandOrShrinkObjects:[module_num:10|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
    Select the input objects:OpenedNuclei
    Name the output objects:ShrunkenOpenedNuclei
    Select the operation:Add partial dividing lines between objects
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
MeasureObjectSizeShape:[module_num:11|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
    Select objects to measure:ShrunkenOpenedNuclei
    Calculate the Zernike features?:No

ConvertObjectsToImage:[module_num:12|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
    Select the input objects:ShrunkenOpenedNuclei
    Name the output image:Nuclei_bin
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:Nuclei_bin
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Elsewhere...|F:\\\\\\\\MkyFISH\\\\\\\\Definitive2\\\\\\\\MDR\\\\\\\\March2018\\\\\\\\Selected genes\\\\\\\\Declumped_brdu_nuclei
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:14|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Elsewhere...|F:\\\\\\\\MkyFISH\\\\\\\\Definitive2\\\\\\\\MDR\\\\\\\\March2018\\\\\\\\Selected genes
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Mky_FISH_march2018_
    Overwrite existing files without warning?:Yes
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